PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Nback
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine fixation
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    PolygonComponent fixation_circle
      fillColor = white
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      units = deg
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[1]) #push event 1 for fixation
  Routine Start_0back
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[2]) #push event 2 for 0back
  Routine Target_L
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Press the space when you see the letter L
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  Routine S
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    TextComponent text_S
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = S
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    KeyboardComponent key_resp_S
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine P
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    TextComponent text_P
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = P
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    KeyboardComponent key_resp_P
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine L
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    TextComponent text_L
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = L
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    KeyboardComponent key_resp_L
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine A
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    TextComponent text_A
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = A
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    KeyboardComponent key_resp_A
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine M
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    TextComponent text_M
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = M
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    KeyboardComponent key_resp_M
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine B
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    TextComponent text_B
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = B
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine E
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    TextComponent text_E
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = E
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine C
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    TextComponent text_C
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = C
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    KeyboardComponent key_resp_C
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine LSL
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    CodeComponent LSL_code
      Code Type = Auto->JS
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      Begin Experiment:
        #initiate connection with lab streaming layer
        from pylsl import StreamInfo, StreamOutlet #import required classes
        info = StreamInfo(name='Trigger', type='Markers', channel_count=1,
        channel_format='int32', source_id='Example') #set parameters
        outlet=StreamOutlet(info) #initialize stream
  Routine Get_Ready
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    TextComponent getready_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Get Ready!
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    KeyboardComponent start_press
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine D
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    TextComponent text_D
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = D
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    KeyboardComponent key_resp_D
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Start_2back
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    TextComponent text_NbackInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Press the Space when the current letter matches the letter from 2 letters ago. 
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    CodeComponent code_3
      Code Type = Auto->JS
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      End Routine:
        outlet.push_sample(x=[3]) #push event 3 for 2back
  Routine H
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    TextComponent text_H
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = H
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    KeyboardComponent key_resp_H
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine I
    TextComponent text_I
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = I
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
    KeyboardComponent key_resp_I
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine K
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    TextComponent text_K
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = K
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    KeyboardComponent key_resp_K
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine O
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    TextComponent text_O
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = O
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    KeyboardComponent key_resp_O
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine T
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    TextComponent text_T
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = T
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    KeyboardComponent key_resp_T
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Target_H
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    TextComponent text_TargetH
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Press the space when you see the letter H
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  Routine Target_C
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    TextComponent text_TargetC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Press the space when you see the letter C
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  Routine Target_M
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    TextComponent text_TargetM
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Press the space when you see the letter M
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  Routine EndofTask
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    TextComponent text_End
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Great Job! 
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Flow
  Routine LSL
  Routine Get_Ready
  Routine fixation
  Routine Target_L
  Routine Start_0back
  Routine S
  Routine P
  Routine A
  Routine L
  Routine B
  Routine M
  Routine L
  Routine C
  Routine I
  Routine D
  Routine fixation
  Routine Start_2back
  Routine H
  Routine K
  Routine O
  Routine K
  Routine T
  Routine C
  Routine E
  Routine L
  Routine E
  Routine A
  Routine fixation
  Routine Target_H
  Routine Start_0back
  Routine M
  Routine H
  Routine C
  Routine L
  Routine E
  Routine H
  Routine S
  Routine K
  Routine T
  Routine A
  Routine fixation
  Routine Start_2back
  Routine I
  Routine M
  Routine D
  Routine E
  Routine D
  Routine A
  Routine P
  Routine T
  Routine B
  Routine T
  Routine fixation
  Routine Start_2back
  Routine K
  Routine H
  Routine K
  Routine O
  Routine L
  Routine S
  Routine C
  Routine S
  Routine D
  Routine I
  Routine fixation
  Routine Target_C
  Routine Start_0back
  Routine M
  Routine B
  Routine O
  Routine K
  Routine C
  Routine E
  Routine L
  Routine A
  Routine C
  Routine T
  Routine fixation
  Routine Target_M
  Routine Start_0back
  Routine O
  Routine D
  Routine M
  Routine L
  Routine S
  Routine P
  Routine B
  Routine M
  Routine I
  Routine C
  Routine fixation
  Routine Start_2back
  Routine B
  Routine E
  Routine L
  Routine A
  Routine I
  Routine A
  Routine D
  Routine S
  Routine D
  Routine T
  Routine EndofTask
