PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1280, 720]
  expName = fingertap1
  keyboardBackend = ioHub
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Routines
  Routine LSL
    CodeComponent LSL_code
      Code Type = Auto->JS
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet # import required classes
        info = StreamInfo(name='TriggerStream', type='Markers', channel_count=1,
        channel_format='int32', source_id='Example') # sets variables for object info
        outlet = StreamOutlet(info) # initialize stream.
  Routine Start_Routine
    TextComponent Start
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press the tab key when you are ready to begin
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    KeyboardComponent key_resp
      allowedKeys = 'tab'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine left_trial
    CodeComponent event_left
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[1])
    TextComponent left
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = Left
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  Routine right_trial
    CodeComponent right_evt
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[2])
    TextComponent right
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = Right
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  Routine fixation
    CodeComponent event_fix
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(x=[3])
    TextComponent text_fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15.0
      text = +
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Flow
  Routine LSL
  Routine Start_Routine
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine fixation
    Routine left_trial
    Routine fixation
    Routine right_trial
  LoopTerminator trials
